CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Probabilities")
    Name to assign these images:Ilastik_Probabilities
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain ".tiff")
    Name to assign these images:TolBlue
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GaussianFilter:[module_num:5|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
    Select the input image:Ilastik_Probabilities
    Name the output image:GaussianFilter
    Sigma:1

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:GaussianFilter
    Name the primary objects to be identified:Balloon_Cells
    Typical diameter of objects, in pixel units (Min,Max):15,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.50
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
OverlayOutlines:[module_num:7|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:TolBlue
    Name the output image:Balloon_Cells_Outline_Overlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:Balloon_Cells

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:Balloon_Cells_Outline_Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ilastik_Probabilities
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Same folder as image|Desktop/Ilastik Balloon Cells/Validation Images/Analyzed (CellProfiler)
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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